#pragma once
#include "HSLSeqLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\MicrolabSTAR\\Hamilton\\Pipette\\Tools\\PipetteTools.hs_"
#include "HSLErrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace _8CHANNEL {
  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    PIPETTETOOLS::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    PIPETTETOOLS::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
  }

  private function Aspirate( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private sequence Sequence;
    private variable RetractDistanceArray[];
    private variable MaxHeightDifferenceArray[];
    private variable SequenceArray[];
    private variable VolumeArray[];
    private variable MixCyclesArray[];
    private variable LiquidClassArray[];
    private variable SubmergeDepthArray[];
    private variable cLLDArray[];
    private variable ModeArray[];
    private variable SequencePositionArray[];
    private variable NameArray[];
    private variable pLLDArray[];
    private variable MixVolumeArray[];
    private variable MixPositionArray[];
    private variable LiquidFollowingArray[];
    private variable FixedHeightArray[];
    private variable SeqEnd;
    private variable ChannelNumberArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"), NameArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"), VolumeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"), ModeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"), LiquidClassArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"), cLLDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"), SubmergeDepthArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:PressureLiquidLevelDetection:"), pLLDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MaxHeightDifference:"), MaxHeightDifferenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"), FixedHeightArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"), RetractDistanceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"), LiquidFollowingArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"), MixCyclesArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"), MixPositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"), MixVolumeArray);
    PIPETTETOOLS::PadArray(VolumeArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(ModeArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(LiquidClassArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(cLLDArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(SubmergeDepthArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(pLLDArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MaxHeightDifferenceArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(FixedHeightArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(RetractDistanceArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(LiquidFollowingArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixCyclesArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixPositionArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixVolumeArray, ChannelNumberArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_1 ;
      err.Clear();
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      errLabel_1 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Dispense( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable RetractDistanceArray[];
    private variable SequenceArray[];
    private variable VolumeArray[];
    private variable MixCyclesArray[];
    private variable LiquidClassArray[];
    private variable SideTouchArray[];
    private variable SubmergeDepthArray[];
    private variable cLLDArray[];
    private variable ModeArray[];
    private variable ChannelNumberArray[];
    private variable NameArray[];
    private variable SequencePositionArray[];
    private variable MixVolumeArray[];
    private variable MixPositionArray[];
    private variable LiquidFollowingArray[];
    private variable FixedHeightArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"), NameArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Volume:"), VolumeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Mode:"), ModeArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:FixHeightFromBottom:"), FixedHeightArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RetractDistanceForTransportAir:"), RetractDistanceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:CapacitiveLiquidLevelDetection:"), cLLDArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SubmergeDepth:"), SubmergeDepthArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SideTouch:"), SideTouchArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidClass:"), LiquidClassArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:LiquidFollowing:"), LiquidFollowingArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixCycles:"), MixCyclesArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixPosition:"), MixPositionArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:MixVolume:"), MixVolumeArray);
    PIPETTETOOLS::PadArray(VolumeArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(ModeArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(FixedHeightArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(RetractDistanceArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(cLLDArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(SubmergeDepthArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(SideTouchArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(LiquidClassArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(LiquidFollowingArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixCyclesArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixPositionArray, ChannelNumberArray);
    PIPETTETOOLS::PadArray(MixVolumeArray, ChannelNumberArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_2 ;
      err.Clear();
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      errLabel_2 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Pickup( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable SequenceArray[];
    private variable ChannelNumberArray[];
    private variable NameArray[];
    private variable SequencePositionArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"), NameArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_3 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_3 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function Eject( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable ChannelSelection;
    private variable SeqEnd;
    private sequence Sequence;
    private variable SequenceArray[];
    private variable ChannelNumberArray[];
    private variable NameArray[];
    private variable SequencePositionArray[];
    private variable CustomErrorHandling;
    private variable State;
    private variable Values[];
    private variable Keys[];
    private variable Message;
    private variable RequestID;
    private object o_JSONObject;
    RequestID = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Request Identifier:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Name:"), NameArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumber:"), ChannelNumberArray);
    ChannelSelection = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:ChannelNumberString:"));
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:Sequence:"), SequenceArray);
    JSONPARSER::GetJSONArrayElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:SequencePosition:"), SequencePositionArray);
    PIPETTETOOLS::CreateSequence(ML_STAR, SequenceArray, SequencePositionArray, Sequence);
    SeqEnd = SeqGetTotal(Sequence);
    Sequence.SetCount(SeqEnd);
    Sequence.SetCurrentPosition(1);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    if (CustomErrorHandling == 1)
    {
      onerror goto errLabel_4 ;
      err.Clear();
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      errLabel_4 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        State = 0;
        Message = ErrGetDescription();
      }   /* end if from skip handler if no error */
    }
    else
    {
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
    }
    HSLJsonLib::Create(o_JSONObject);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "'Pickup")
    {
      Pickup(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Aspirate")
    {
      Aspirate(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Dispense")
    {
      Dispense(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "Eject")
    {
      Eject(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
