#pragma once
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\JsonParser\\JsonParser.hs_"
#include "HSLDevLib.hsl"
#include "Visual_NTR_library\\Visual_NTR_library.hs_"
#include "HSLSeqLib.hsl"
#include "HSLStrLib.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\ActionServerEndpoints\\ActionServerEndpoints.hs_"
#include "HSLJson\\HSLJson.hsl"
#include "PytomatedLiquidHandling\\PytomatedLiquidHandling\\Driver\\Hamilton\\Backend\\BaseHamiltonBackend\\Hamilton\\StateServerEndpoints\\StateServerEndpoints.hs_"
#include "HSLTrcLib.hsl"
#include "HSLMETEDLib.hs_"
#include "HSLMECCLib.hs_"
#include "HSLPTLLib.hsl"

namespace NTR {
  private function GetNumTips( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  private function GetTipPositions( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void ;
  private function LoadTips( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void ;
  function _InitLibrary() {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    JSONPARSER::_InitLibrary();
    VISUAL_NTR_LIBRARY::_InitLibrary();
    ACTIONSERVERENDPOINTS::_InitLibrary();
    STATESERVERENDPOINTS::_InitLibrary();
  }
  function _ExitLibrary() {
    JSONPARSER::_ExitLibrary();
    VISUAL_NTR_LIBRARY::_ExitLibrary();
    ACTIONSERVERENDPOINTS::_ExitLibrary();
    STATESERVERENDPOINTS::_ExitLibrary();
  }

  private function LoadTips( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable TipSequence;
    private sequence Sequence;
    private variable RackWasteSequence;
    private sequence WasteSequence;
    private sequence Waste;
    private variable GeneratedRackWasteSequence;
    private variable SequenceAvailable;
    private sequence GeneratedWasteSequence;
    private variable LabID;
    private variable PosID;
    private variable GripperSequence;
    private sequence Gripper;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    TipSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipSequence:"));
    RackWasteSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:RackWasteSequence:"));
    GripperSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripperSequence:"));
    GeneratedRackWasteSequence = StrConcat2(TipSequence, Translate("_GeneratedWasteSequence"));
    DevGetSequenceRef(ML_STAR, TipSequence, Sequence);
    DevGetSequenceRef(ML_STAR, RackWasteSequence, WasteSequence);
    DevGetSequenceRef(ML_STAR, GripperSequence, Gripper);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    SequenceAvailable = DevGetSequenceRef(ML_STAR, GeneratedRackWasteSequence, GeneratedWasteSequence);
    if (SequenceAvailable == 0)
    {
      MECC::TraceComment(Translate("Sequence not found in deck layout. Should be in the form of: <SequenceName>_GeneratedWasteSequence.\n\nNOTE: This must be added manually due to the way NTR library works"));
      abort;
    }
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Edit(ML_STAR, Sequence, TipSequence, Translate(""), 1, 1000);
    VISUAL_NTR_LIBRARY::SortSeqToDiscardEmptyNTROnDeck(WasteSequence, 0, Waste, ML_STAR);
    LabID = SeqGetLabwareId(Waste);
    PosID = SeqGetPositionId(Waste);
    SeqRemoveAll(GeneratedWasteSequence);
    SeqAdd(GeneratedWasteSequence, LabID, PosID);
    GeneratedWasteSequence.SetCount(1);
    GeneratedWasteSequence.SetCurrentPosition(1);
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, Sequence, TipSequence, GeneratedWasteSequence, Gripper, 1, 1, 0, Sequence, 0, 8, 0, 1, Translate(""), 0);
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetStringProperty(o_JSONObject, Translate("GeneratedWasteSequence"), GeneratedRackWasteSequence);
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function GetTipPositions( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable TipSequence;
    private variable NumPositions;
    private sequence Sequence;
    private variable EndPosition;
    private variable CurrentPosition;
    private variable PositionsLeft;
    private variable GeneratedRackWasteSequence;
    private variable GripperSequence;
    private sequence Gripper;
    private sequence GeneratedWasteSequence;
    private variable CustomErrorHandling;
    private variable State;
    private variable Message;
    private object o_JSONObject;
    private variable Counter;
    private variable Temp;
    TipSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipSequence:"));
    GeneratedRackWasteSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GeneratedRackWasteSequence:"));
    GripperSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:GripperSequence:"));
    NumPositions = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:NumPositions:"));
    DevGetSequenceRef(ML_STAR, TipSequence, Sequence);
    DevGetSequenceRef(ML_STAR, GeneratedRackWasteSequence, GeneratedWasteSequence);
    DevGetSequenceRef(ML_STAR, GripperSequence, Gripper);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    CurrentPosition = Sequence.GetCurrentPosition();
    EndPosition = Sequence.GetCount();
    PositionsLeft = EndPosition - CurrentPosition;
    PositionsLeft = PositionsLeft + 1;
    if (PositionsLeft < 8)
    {
      if (EndPosition == 768)
      {
        State = 0;
        Message = Translate("Not enough tips available. Please load more tips.");
        HSLJsonLib::Create(o_JSONObject);
        HSLJsonLib::SetArray(o_JSONObject, Translate("TipPositions"));
        ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
        HSLJsonLib::Release(o_JSONObject);
        return;
      }
    }
    VISUAL_NTR_LIBRARY::Channels_TipCounter_Write(ML_STAR, Sequence, TipSequence, GeneratedWasteSequence, Gripper, 1, 1, 0, Sequence, 0, 8, 0, 1, Translate(""), 0);
    Temp = CurrentPosition + NumPositions;
    Sequence.SetCurrentPosition(Temp);
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetArray(o_JSONObject, Translate("TipPositions"));
    HSLJsonLib::SetArrayLength(o_JSONObject, Translate("TipPositions"), NumPositions);
    {
      for(Counter = 0; Counter < NumPositions;)
      {
        Counter = Counter + 1;
        Temp = Counter - 1;
        Temp = CurrentPosition + Temp;
        HSLJsonLib::SetIntegerArrayElement(o_JSONObject, Translate("TipPositions"), Counter, Temp);
      }
    }
    ACTIONSERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  private function GetNumTips( device & ML_STAR, object & i_EndpointOutputDataJSONObject ) void {
    private variable CurrentPosition;
    private variable CustomErrorHandling;
    private variable TipSequence;
    private variable Remaining;
    private variable AbsoluteEnd;
    private variable State;
    private sequence Sequence;
    private variable Message;
    private object o_JSONObject;
    TipSequence = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("Command Parameters:TipSequence:"));
    DevGetSequenceRef(ML_STAR, TipSequence, Sequence);
    CustomErrorHandling = JSONPARSER::GetJSONElement(i_EndpointOutputDataJSONObject, Translate("CustomErrorHandling:"));
    State = 1;
    Message = Translate("Success");
    CurrentPosition = Sequence.GetCurrentPosition();
    AbsoluteEnd = SeqGetTotal(Sequence);
    Remaining = AbsoluteEnd - CurrentPosition;
    HSLJsonLib::Create(o_JSONObject);
    HSLJsonLib::SetIntegerProperty(o_JSONObject, Translate("NumRemaining"), Remaining);
    STATESERVERENDPOINTS::RespondToCommand(State, Message, o_JSONObject);
    HSLJsonLib::Release(o_JSONObject);
  }

  function HandleCommand( device & ML_STAR, variable CommandName, object & i_EndpointOutputDataJSONObject ) void {
    if (CommandName == "LoadTips")
    {
      LoadTips(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "GetTipPositions")
    {
      GetTipPositions(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    if (CommandName == "GetNumTips")
    {
      GetNumTips(ML_STAR, i_EndpointOutputDataJSONObject);
      return;
    }
    MECC::TraceComment(Translate("@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n\nCommand not handled. Please correct. Aborting...\n\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@\n@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@@"));
    abort;
  }
} // library namespace
